//click once on the images you want to combine 
//double click on the tool
//shift to reset

var list = newArray("");
var n = 0;

macro "Combine Tool - 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"{
	list[n] = getTitle();
	showStatus(list[n]);
	n++;
}

macro "Combine Tool Options"{
	if(isKeyDown("shift")){ // if list is wrong, press shift to reset the list
		showMessage("List reset");
		list = newArray("");
		n = 0;
		exit;
	}
	combine(); //function below
	list = newArray("");
	n = 0;
}
}

function combine(){
	run("Combine...", " stack1=[" + list[0] + "] stack2=[" + list[1] + "]");
	rename(list[0] + " + " + list[1]);
	list = newArray("");
	n = 0;
	String.copy(list[0]);
}
